// Description: B-Spline, NCC, ASGD
// Designed for non-rigid portion of semi-simultaneous registration of cardiac US images

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "LinearInterpolator")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalLinearInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

(ErodeMask "false" )

(NumberOfResolutions 1)
(ImagePyramidSchedule 2 2 2 )

(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "false")
(AutomaticScalesEstimation "true")


(WriteTransformParametersEachIteration "false")
(WriteResultImageAfterEachResolution "false") 
(ShowExactMetricValue "false")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 20 )

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(UseRandomSampleRegion "false")
(NumberOfSpatialSamples 5000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "false")
(MaximumNumberOfSamplingAttempts 10)
(RequiredRatioOfValidSamples 0.05)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(WriteResultImage "false")
(ResultImagePixelType "short")
(ResultImageFormat "mhd")

